PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'condition': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = InProgress
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 0.0902
      shape = circle
      size = circleSize
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #print(trials.conditions)
        #thisCondition = trials.conditions[0]['label']
        #changeSalience = trials.conditions[0]['changeSalience']
        cycleDuration = 4 #starting breath length (in s)
        randomChange = random()

        trialNum += 1

        #check for acceleration or deceleration
        if (changeDirection == 'Acc'):
            if randomChange <= .8:
                direction = -1
                correctAns = 'right'
            else:
                direction = 0
                correctAns = 'up'
        else:
            if randomChange <= .8:
                direction = 1
                correctAns = 'left'
            else:
                direction = 0
                correctAns = 'up'

        changeVal = 1 + (direction * level)
        breathCount = 0
        freshBreath = True

        changeAmount = changeVal ** (1/(numBreaths -1))

        #print(randomChange)
        #print(direction)
        #print(correctAns)
        #print(trials.currentStaircase.condition['label'])

        trialClock = core.Clock()
      Each Frame:
        t = trialClock.getTime()

        phase = (t % cycleDuration) / cycleDuration

        if phase <= 0.5:
            circleSize = 0.1 + (0.2 * phase * 2)  # Inhale
            if freshBreath == False:
                breathCount += 1
                if changeSalience == 0:
                    cycleDuration *= changeAmount
                if changeSalience == 1:
                    if breathCount == midPoint:
                        cycleDuration *= changeVal
                trialClock = core.Clock()
                freshBreath = True
                #print(breathCount)
                #print(cycleDuration)
                if breathCount >= numBreaths:
                    continueRoutine = False
        else:
            circleSize  = 0.1 + (0.2 * (1 - (phase - 0.5) * 2))  # Exhale
            if freshBreath == True:
                freshBreath = False

        Circle.size = circleSize
      End Routine:
        #print("Trial: " + trials.thisTrialN)
        #print(trials)
        #print(trials.conditions)
        #print(trials.conditions[0])
        print(trialNum)

        thisExp.addData('Condition', thisCondition)
        thisExp.addData('Salience', changeSalience)
        thisExp.addData('Level', level)
        thisExp.addData('Direction',direction)
        thisExp.addData('DirectionLabel',changeDirection)
        thisExp.addData('Correct',correctAns)

        if thisCondition == "highSalienceAcc":
            n_highSalienceACC += 1
            highIntensitiesACC.append(level)
            if n_highSalienceACC > 2:
                highSEACC = std(highIntensitiesACC) / (n_highSalienceACC ** 0.5)
                #print(highSEACC)
                highSalienceCIACC = 1.645 * highSEACC
                highStepACC = abs(level - lastHighLevelACC)
                lastHighLevelACC = level
                highStopOKACC = highSalienceCIACC < (highStepACC / 2)
        elif thisCondition == "lowSalienceAcc":
            n_lowSalienceACC += 1
            lowIntensitiesACC.append(level)
            if n_lowSalienceACC > 2:
                lowSEACC = std(lowIntensitiesACC) / (n_lowSalienceACC ** 0.5)
                #print(lowSEACC)
                lowSalienceCIACC = 1.645 * lowSEACC
                lowStepACC = abs(level - lastLowLevelACC)
                lastLowLevelACC = level
                lowStopOKACC = lowSalienceCIACC < (lowStepACC / 2)
        elif thisCondition == "highSalienceDec":
            n_highSalienceDEC += 1
            highIntensitiesDEC.append(level)
            if n_highSalienceDEC > 2:
                highSEDEC = std(highIntensitiesDEC) / (n_highSalienceDEC ** 0.5)
                #print(highSEDEC)
                highSalienceCIDEC = 1.645 * highSEDEC
                highStepDEC = abs(level - lastHighLevelDEC)
                lastHighLevelDEC = level
                highStopOKDEC = highSalienceCIDEC < (highStepDEC / 2)
        else:
            n_lowSalienceDEC += 1
            lowIntensitiesDEC.append(level)
            if n_lowSalienceDEC > 2:
                lowSEDEC = std(lowIntensitiesDEC) / (n_lowSalienceDEC ** 0.5)
                #print(lowSEDEC)
                lowSalienceCIDEC = 1.645 * lowSEDEC
                lowStepDEC = abs(level - lastLowLevelDEC)
                lastLowLevelDEC = level
                lowStopOKDEC = lowSalienceCIDEC < (lowStepDEC / 2)

        thisExp.addData('highCIACC',highSalienceCIACC)
        thisExp.addData('lowCIACC',lowSalienceCIACC)
        thisExp.addData('highCIDEC',highSalienceCIDEC)
        thisExp.addData('lowCIDEC',lowSalienceCIDEC)

        thisExp.addData('highStepACC',highStepACC)
        thisExp.addData('lowStepACC',lowStepACC)
        thisExp.addData('highStepDEC',highStepDEC)
        thisExp.addData('lowStepDEC',lowStepDEC)

        thisExp.addData('highStopOKACC',highStopOKACC)
        thisExp.addData('lowStopOKACC',lowStopOKACC)
        thisExp.addData('highStopOKDEC',highStopOKDEC)
        thisExp.addData('lowStopOKDEC',lowStopOKDEC)

        if trialNum == 10:
            trials.finished = True
  Routine Pulse
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  Routine Start
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Sensory Attention Task

        In this task you will see a circle grow and shrink 4 times in a row.

        Please try to sense if things are getting faster, slower, or staying the same speed.

        Press the <spacebar> to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent StartCode
      Code Type = Auto->JS
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      Before Experiment:
        def std(numbers, is_sample=True):
            """
            Calculate the standard deviation of a list of numbers without using external libraries.

            Parameters:
            numbers: List of numbers to calculate standard deviation for
            is_sample: If True, calculates sample standard deviation (n-1),
                      if False, calculates population standard deviation (n)

            Returns:
            float: The standard deviation of the numbers

            Raises:
            ValueError: If the input list is empty or has less than 2 items for sample std dev
            """
            # Check for valid input
            if not numbers:
                raise ValueError("Cannot calculate standard deviation of empty list")
            if is_sample and len(numbers) < 2:
                raise ValueError("Sample standard deviation requires at least 2 values")

            # Calculate mean
            mean = sum(numbers) / len(numbers)

            # Calculate sum of squared differences from mean
            squared_diff_sum = 0
            for x in numbers:
                squared_diff_sum += (x - mean) ** 2

            # Determine divisor based on whether we're calculating sample or population std dev
            divisor = len(numbers) - 1 if is_sample else len(numbers)

            # Calculate standard deviation using exponentiation operator for square root
            std_dev = (squared_diff_sum / divisor) ** 0.5

            return std_dev
      Begin Experiment:
        circleSize = .5
        numBreaths = 4
        freshBreath = True

        #changeVal = 1.2
        #changeSalience = 1
        midPoint = round(numBreaths / 2,0)

        n_highSalienceACC = 0
        n_lowSalienceACC = 0
        n_highSalienceDEC = 0
        n_lowSalienceDEC = 0

        highIntensitiesACC = []
        lowIntensitiesACC = []
        highIntensitiesDEC = []
        lowIntensitiesDEC = []

        highSEACC = ""
        lowSEACC = ""
        highSEDEC = ""
        lowSEDEC= ""


        highSalienceCIDEC = ""
        lowSalienceCIDEC = ""
        highSalienceCIACC = ""
        lowSalienceCIACC = ""

        highStopOKACC = False
        lowStopOKACC = False
        highStopOKDEC = False
        lowStopOKDEC = False

        highCIACC = ""
        lowCIACC = ""
        highCIDEC = ""
        lowCIDEC = ""

        highStepACC = ""
        lowStepACC = ""
        highStepDEC = ""
        lowStepDEC = ""

        lastHighLevelACC = .5
        lastLowLevelACC = .5
        lastHighLevelDEC = .5
        lastLowLevelDEC = .5

        #Eventually calculate the thresholds
        T_hiAc = ""
        T_loAc = ""
        T_hiDe = ""
        T_loDe = ""

        #Thresholds generate critical thresholds
        Crit_Ac = ""
        Crit_De = ""
  Routine judgebreath
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    KeyboardComponent kbChange
      allowedKeys = 'left','up','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent speedImage
      image = images/SpeedImg.png
      size = (1,.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                response = 'left'
            elif 'right' in keys:
                response = 'right'
            elif 'up' in keys:
                response = 'up'
      End Routine:
        thisExp.addData('Response', response)

        if correctAns == response:
            thisExp.addData('Accuracy', 1)
        else:
            thisExp.addData('Accuracy', 0)
  Routine judgeconfidence
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    ImageComponent confidenceImage
      image = images/ConfidenceImg.png
      size = (1.0, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent confidenceSlider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (.8, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        confidenceSlider.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                confidenceSlider.markerPos = confidenceSlider.markerPos - 1
            elif 'right' in keys:
                confidenceSlider.markerPos = confidenceSlider.markerPos  + 1
            elif 'return' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'enter' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'space' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
      End Routine:
        thisExp.addData("JudgeRating", confidenceSlider.markerPos)
  Routine judgearousal_2
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    ImageComponent arousalImage
      image = images/ArousalImg.png
      size = (1.0, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent arousalSlider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        arousalSlider.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                arousalSlider.markerPos = arousalSlider.markerPos - 1
            elif 'right' in keys:
                arousalSlider.markerPos = arousalSlider.markerPos  + 1
            elif 'return' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'enter' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'space' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
      End Routine:
        thisExp.addData("ArousalRating", arousalSlider.markerPos)
  Routine CalcThresholds
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        T_hiAc = (highIntensitiesACC[-2] + highIntensitiesACC[-1])/2
        T_loAc = (lowIntensitiesACC[-2] + lowIntensitiesACC[-1])/2
        T_hiDe = (highIntensitiesDEC[-2] + highIntensitiesDEC[-1])/2
        T_loDe = (lowIntensitiesDEC[-2] + lowIntensitiesDEC[-1])/2

        print(T_hiAc)
        print(T_loAc)
        print(T_hiDe)
        print(T_loDe)

        #Thresholds generate critical thresholds
        Crit_Ac = (T_hiAc + T_loAc) / 2
        Crit_De = (T_hiDe + T_loDe) / 2
  Routine TestTrialInstruct
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! Let's do a few more rounds to see if we've measured correctly.

        Please press <spacebar> to begin breathing along with the circle again.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct2
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After each set of circles, you will be asked if things: slowed down (left arrow), stayed the same (up arrow), or sped up (right arrow). There will be a picture to remind you.

        You will then be asked to rate your confidence in your judgment, and how energetic you feel.

        Press <spacebar> to begin...
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
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    PolygonComponent TestCircle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 0.0902
      shape = circle
      size = circleSize
      startVal [time (s)] = 0.0
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    CodeComponent testTrialCode
      Code Type = Auto->JS
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      Begin Routine:
        #Same as training but now set level to critical val
        cycleDuration = 4 #starting breath length (in s)
        #randomChange = random()

        #check for acceleration or deceleration
        if (changeDirection == 'Acc'):
            level = Crit_Ac
            direction = -1
            correctAns = 'right'
        else:
            level = Crit_De
            direction = 1
            correctAns = 'left'

        changeVal = 1 + (direction * level)
        breathCount = 0
        freshBreath = True

        changeAmount = changeVal ** (1/(numBreaths -1))

        trialClock = core.Clock()
      Each Frame:
        t = trialClock.getTime()

        phase = (t % cycleDuration) / cycleDuration

        if phase <= 0.5:
            circleSize = 0.1 + (0.2 * phase * 2)  # Inhale
            if freshBreath == False:
                breathCount += 1
                if changeSalience == 0:
                    cycleDuration *= changeAmount
                if changeSalience == 1:
                    if breathCount == midPoint:
                        cycleDuration *= changeVal
                trialClock = core.Clock()
                freshBreath = True
                #print(breathCount)
                #print(cycleDuration)
                if breathCount >= numBreaths:
                    continueRoutine = False
        else:
            circleSize  = 0.1 + (0.2 * (1 - (phase - 0.5) * 2))  # Exhale
            if freshBreath == True:
                freshBreath = False

        TestCircle.size = circleSize
      End Routine:
        thisExp.addData('Condition', thisCondition)
        thisExp.addData('Salience', changeSalience)
        thisExp.addData('Level', level)
        thisExp.addData('Direction',direction)
        thisExp.addData('DirectionLabel',changeDirection)
        thisExp.addData('Correct',correctAns)
        thisExp.addData('Crit_Ac',Crit_Ac)
        thisExp.addData('Crit_De',Crit_De)

        if thisCondition == "highSalienceAcc":
            n_highSalienceACC += 1
            highIntensitiesACC.append(level)
            if n_highSalienceACC > 2:
                highSEACC = std(highIntensitiesACC) / (n_highSalienceACC ** 0.5)
                #print(highSEACC)
                highSalienceCIACC = 1.645 * highSEACC
                highStepACC = abs(level - lastHighLevelACC)
                lastHighLevelACC = level
                highStopOKACC = highSalienceCIACC < (highStepACC / 2)
        elif thisCondition == "lowSalienceAcc":
            n_lowSalienceACC += 1
            lowIntensitiesACC.append(level)
            if n_lowSalienceACC > 2:
                lowSEACC = std(lowIntensitiesACC) / (n_lowSalienceACC ** 0.5)
                #print(lowSEACC)
                lowSalienceCIACC = 1.645 * lowSEACC
                lowStepACC = abs(level - lastLowLevelACC)
                lastLowLevelACC = level
                lowStopOKACC = lowSalienceCIACC < (lowStepACC / 2)
        elif thisCondition == "highSalienceDec":
            n_highSalienceDEC += 1
            highIntensitiesDEC.append(level)
            if n_highSalienceDEC > 2:
                highSEDEC = std(highIntensitiesDEC) / (n_highSalienceDEC ** 0.5)
                #print(highSEDEC)
                highSalienceCIDEC = 1.645 * highSEDEC
                highStepDEC = abs(level - lastHighLevelDEC)
                lastHighLevelDEC = level
                highStopOKDEC = highSalienceCIDEC < (highStepDEC / 2)
        else:
            n_lowSalienceDEC += 1
            lowIntensitiesDEC.append(level)
            if n_lowSalienceDEC > 2:
                lowSEDEC = std(lowIntensitiesDEC) / (n_lowSalienceDEC ** 0.5)
                #print(lowSEDEC)
                lowSalienceCIDEC = 1.645 * lowSEDEC
                lowStepDEC = abs(level - lastLowLevelDEC)
                lastLowLevelDEC = level
                lowStopOKDEC = lowSalienceCIDEC < (lowStepDEC / 2)

        thisExp.addData('highCIACC',highSalienceCIACC)
        thisExp.addData('lowCIACC',lowSalienceCIACC)
        thisExp.addData('highCIDEC',highSalienceCIDEC)
        thisExp.addData('lowCIDEC',lowSalienceCIDEC)

        thisExp.addData('highStepACC',highStepACC)
        thisExp.addData('lowStepACC',lowStepACC)
        thisExp.addData('highStepDEC',highStepDEC)
        thisExp.addData('lowStepDEC',lowStepDEC)

        thisExp.addData('highStopOKACC',highStopOKACC)
        thisExp.addData('lowStopOKACC',lowStopOKACC)
        thisExp.addData('highStopOKDEC',highStopOKDEC)
        thisExp.addData('lowStopOKDEC',lowStopOKDEC)
  Routine CompleteInstruct
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! You've completed the study.

        The purpose of the study was to see whether your mood and wellbeing are related to how finely you can detect change in your senses. Some people focused on the visual circle, others focused on breathing along with the circle to see if that sense modality makes a diffference.

        Thanks for your participation. You are done!
        Press <spacebar> to exit.
  Routine CounterCode
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        trialNum = 0
Flow
  Routine Start
  Routine Instruct2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = justLabels.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisCondition', 'lowSalienceAcc'), ('changeSalience', 0), ('changeDirection', 'Acc')]),
      OrderedDict([('thisCondition', 'highSalienceAcc'), ('changeSalience', 1), ('changeDirection', 'Acc')]),
      OrderedDict([('thisCondition', 'lowSalienceDec'), ('changeSalience', 0), ('changeDirection', 'Dec')]),
      OrderedDict([('thisCondition', 'highSalienceDec'), ('changeSalience', 1), ('changeDirection', 'Dec')])]
    Routine CounterCode
    LoopInitiator trials loopType="MultiStairHandler"
      conditions = [OrderedDict([('label', 'astair'), ('startVal', 0.4), ('startValSd', 0.35), ('pThreshold', 0.75), ('method', 'quantile'), ('beta', 3.5), ('delta', 0.05), ('gamma', 0.333), ('grain', 0.05), ('range', 0.7)])]
      conditionsFile = questDefinitionGeneral.csv
      loopType = interleaved staircases
      nReps = 10
      stairType = QUEST
      switchMethod = random
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      Routine trial
      Routine judgebreath
      Routine judgeconfidence
      Routine judgearousal_2
    LoopTerminator trials
  LoopTerminator trials_2
  Routine CalcThresholds
  Routine TestTrialInstruct
  LoopInitiator testTrials loopType="TrialHandler"
    conditionsFile = justLabels.csv
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('thisCondition', 'lowSalienceAcc'), ('changeSalience', 0), ('changeDirection', 'Acc')]),
      OrderedDict([('thisCondition', 'highSalienceAcc'), ('changeSalience', 1), ('changeDirection', 'Acc')]),
      OrderedDict([('thisCondition', 'lowSalienceDec'), ('changeSalience', 0), ('changeDirection', 'Dec')]),
      OrderedDict([('thisCondition', 'highSalienceDec'), ('changeSalience', 1), ('changeDirection', 'Dec')])]
    Routine TestTrial
    Routine judgebreath
    Routine judgeconfidence
    Routine judgearousal_2
  LoopTerminator testTrials
  Routine CompleteInstruct
