PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'Participant': '0001', 'Condition': 'breath'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $backcolor
  expName = Intero2025
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Circle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 0.0902
      shape = circle
      size = circleSize
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        nLocalTrial = 0
      Begin Routine:
        #For onine only:
        #thisCondition = trials.conditions[0]['label']
        #print(trials.conditions)

        #For local (where interleaved staircase works):
        thisCondition = condition['label']
        changeDirection = condition['changeDirection']
        changeSalience = condition['changeSalience']

        #print(thisCondition)
        #print(changeDirection)
        #print(changeSalience)
        #print(trials.currentStaircase.condition['label'])

        randomChange = random()

        cycleDuration = resetCycleDuration  #starting breath length (in s)
        #check for acceleration or deceleration
        if (changeDirection == 'Acc'):
            if randomChange <= .8:
                direction = -1
                correctAns = 'right'
            else:
                direction = 0
                correctAns = 'up'
        else:
            if randomChange <= .8:
                direction = 1
                correctAns = 'left'
            else:
                direction = 0
                correctAns = 'up'

        changeVal = 1 + (direction * level)
        breathCount = 0
        freshBreath = True

        #only applies to low salience trials
        changeAmount = changeVal ** (1/(numBreaths -1))
        trialClock = core.Clock()
      Each Frame:
        t = trialClock.getTime()

        phase = (t % cycleDuration) / cycleDuration

        if phase <= 0.5:
            circleSize = 0.1 + (0.2 * phase * 2)  # Inhale
            if freshBreath == False:
                breathCount += 1
                if changeSalience == 0:
                    cycleDuration *= changeAmount
                if changeSalience == 1:
                    if breathCount == midPoint:
                        cycleDuration *= changeVal
                trialClock = core.Clock()
                freshBreath = True
                #print(breathCount)
                #print(cycleDuration)
                if breathCount >= numBreaths:
                    continueRoutine = False
        else:
            circleSize  = 0.1 + (0.2 * (1 - (phase - 0.5) * 2))  # Exhale
            if freshBreath == True:
                freshBreath = False

        Circle.size = circleSize
      End Routine:
        #print("Trial: " + trials.thisTrialN)
        #print(trials)
        #print(trials.conditions)
        #print(trials.conditions[0])
        #print(trialNum)

        thisExp.addData('Condition', thisCondition)
        thisExp.addData('Salience', changeSalience)
        thisExp.addData('level', level)
        thisExp.addData('Direction',direction)
        thisExp.addData('DirectionLabel',changeDirection)
        thisExp.addData('Correct',correctAns)

        if thisCondition == "highSalienceAcc":
            n_highSalienceACC += 1
            thisExp.addData('n_highSalienceACC',n_highSalienceACC)
            highIntensitiesACC.append(level)
            if n_highSalienceACC > 2:
                highSEACC = std(highIntensitiesACC) / (n_highSalienceACC ** 0.5)
                #print(highSEACC)
                highSalienceCIACC = 1.645 * highSEACC
                highStepACC = abs(level - lastHighLevelACC)
                lastHighLevelACC = level
                highStopOKACC = highSalienceCIACC < (highStepACC / 2)
        elif thisCondition == "lowSalienceAcc":
            n_lowSalienceACC += 1
            thisExp.addData('n_lowSalienceACC',n_lowSalienceACC)
            lowIntensitiesACC.append(level)
            if n_lowSalienceACC > 2:
                lowSEACC = std(lowIntensitiesACC) / (n_lowSalienceACC ** 0.5)
                #print(lowSEACC)
                lowSalienceCIACC = 1.645 * lowSEACC
                lowStepACC = abs(level - lastLowLevelACC)
                lastLowLevelACC = level
                lowStopOKACC = lowSalienceCIACC < (lowStepACC / 2)
        elif thisCondition == "highSalienceDec":
            n_highSalienceDEC += 1
            thisExp.addData('n_highSalienceDEC',n_highSalienceDEC)
            highIntensitiesDEC.append(level)
            if n_highSalienceDEC > 2:
                highSEDEC = std(highIntensitiesDEC) / (n_highSalienceDEC ** 0.5)
                #print(highSEDEC)
                highSalienceCIDEC = 1.645 * highSEDEC
                highStepDEC = abs(level - lastHighLevelDEC)
                lastHighLevelDEC = level
                highStopOKDEC = highSalienceCIDEC < (highStepDEC / 2)
        else:
            n_lowSalienceDEC += 1
            thisExp.addData('n_lowSalienceDEC',n_lowSalienceDEC)
            lowIntensitiesDEC.append(level)
            if n_lowSalienceDEC > 2:
                lowSEDEC = std(lowIntensitiesDEC) / (n_lowSalienceDEC ** 0.5)
                #print(lowSEDEC)
                lowSalienceCIDEC = 1.645 * lowSEDEC
                lowStepDEC = abs(level - lastLowLevelDEC)
                lastLowLevelDEC = level
                lowStopOKDEC = lowSalienceCIDEC < (lowStepDEC / 2)

        thisExp.addData('highCIACC',highSalienceCIACC)
        thisExp.addData('lowCIACC',lowSalienceCIACC)
        thisExp.addData('highCIDEC',highSalienceCIDEC)
        thisExp.addData('lowCIDEC',lowSalienceCIDEC)

        thisExp.addData('highStepACC',highStepACC)
        thisExp.addData('lowStepACC',lowStepACC)
        thisExp.addData('highStepDEC',highStepDEC)
        thisExp.addData('lowStepDEC',lowStepDEC)

        thisExp.addData('highStopOKACC',highStopOKACC)
        thisExp.addData('lowStopOKACC',lowStopOKACC)
        thisExp.addData('highStopOKDEC',highStopOKDEC)
        thisExp.addData('lowStopOKDEC',lowStopOKDEC)

        #if trialNum == 10:
        #    trials.finished = True
    ParallelOutComponent port_starttrial
      address = 0xCFF8
      register = EIO
      startData = 48
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine Pulse
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  Routine Start
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    TextComponent text
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Sensory Attention Task

        In this task you will see a circle grow and shrink 4 times in a row.  You will be judging whether things are speeding up, slowing down, or staying the same.

        Press the <spacebar> to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine judgebreath
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    KeyboardComponent kbChange
      allowedKeys = 'left','up','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent speedImage
      image = images/SpeedImg.png
      size = (1,.483)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                response = 'left'
            elif 'right' in keys:
                response = 'right'
            elif 'up' in keys:
                response = 'up'
      End Routine:
        thisExp.addData('Response', response)

        if correctAns == response:
            thisExp.addData('Accuracy', 1)
        else:
            thisExp.addData('Accuracy', 0)
    ParallelOutComponent port_teststop
      address = 0xCFF8
      register = EIO
      startData = 64
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine judgeconfidence
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    ImageComponent confidenceImage
      image = images/ConfidenceImg.png
      size = (1.0, 0.307)
      startVal [time (s)] = 0.0
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    SliderComponent confidenceSlider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (.8, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        confidenceSlider.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                confidenceSlider.markerPos = confidenceSlider.markerPos - 1
            elif 'right' in keys:
                confidenceSlider.markerPos = confidenceSlider.markerPos  + 1
            elif 'return' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'enter' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'space' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
      End Routine:
        thisExp.addData("JudgeRating", confidenceSlider.markerPos)
  Routine judgearousal_2
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    ImageComponent arousalImage
      image = images/ArousalImg.png
      size = (1.0, 0.307)
      startVal [time (s)] = 0.0
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    SliderComponent arousalSlider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        arousalSlider.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                arousalSlider.markerPos = arousalSlider.markerPos - 1
            elif 'right' in keys:
                arousalSlider.markerPos = arousalSlider.markerPos  + 1
            elif 'return' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'enter' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
            elif 'space' in keys:
                # confirm rating by setting to current markerPos
                confidenceSlider.rating= confidenceSlider.markerPos
                continueRoutine=False
      End Routine:
        thisExp.addData("ArousalRating", arousalSlider.markerPos)
  Routine CalcThresholds
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    CodeComponent CalcThresholds
      Code Type = Auto->JS
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      End Routine:
        T_hiAc = (highIntensitiesACC[-2] + highIntensitiesACC[-1])/2
        T_loAc = (lowIntensitiesACC[-2] + lowIntensitiesACC[-1])/2
        T_hiDe = (highIntensitiesDEC[-2] + highIntensitiesDEC[-1])/2
        T_loDe = (lowIntensitiesDEC[-2] + lowIntensitiesDEC[-1])/2

        #print(T_hiAc)
        #print(T_loAc)
        #print(T_hiDe)
        #print(T_loDe)

        #Thresholds generate critical thresholds
        Crit_Ac = (T_hiAc + T_loAc) / 2
        Crit_De = (T_hiDe + T_loDe) / 2

        print(Crit_Ac)
        print(Crit_De)
  Routine TestTrialInstruct
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! Let's do just a few more rounds to see if we've measured correctly.

        Please press <spacebar> to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct2
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    TextComponent text_3
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After 4 pulses of the circle, you will be asked if things: slowed down (left arrow), stayed the same (up arrow), or sped up (right arrow). There will be a picture to remind you.

        You will then be asked to rate your confidence in your judgment, and how energetic you feel.

        Press <spacebar> to begin...
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
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    PolygonComponent TestCircle
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 0.0902
      shape = circle
      size = circleSize
      startVal [time (s)] = 0.0
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    CodeComponent testTrialCode
      Code Type = Auto->JS
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      Begin Routine:
        #Same as training but now set level to critical val
        #thisCondition = condition['label']
        #changeDirection = condition['changeDirection']
        #changeSalience = condition['changeSalience']

        thisCondition = testLabel #condition['label']
        changeDirection = testChangeDirection #condition['changeDirection']
        changeSalience = testChangeSalience #condition['changeSalience']

        print(thisCondition)
        print(changeDirection)
        print(changeSalience)

        cycleDuration = resetCycleDuration  #starting breath length (in s)
        #check for acceleration or deceleration
        if (changeDirection == 'Acc'):
            level = Crit_Ac
            direction = -1
            correctAns = 'right'
        else:
            level = Crit_De
            direction = 1
            correctAns = 'left'

        changeVal = 1 + (direction * level)
        breathCount = 0
        freshBreath = True

        changeAmount = changeVal ** (1/(numBreaths -1))

        trialClock = core.Clock()
      Each Frame:
        t = trialClock.getTime()

        phase = (t % cycleDuration) / cycleDuration

        if phase <= 0.5:
            circleSize = 0.1 + (0.2 * phase * 2)  # Inhale
            if freshBreath == False:
                breathCount += 1
                if changeSalience == 0:
                    cycleDuration *= changeAmount
                if changeSalience == 1:
                    if breathCount == midPoint:
                        cycleDuration *= changeVal
                trialClock = core.Clock()
                freshBreath = True
                #print(breathCount)
                #print(cycleDuration)
                if breathCount >= numBreaths:
                    continueRoutine = False
        else:
            circleSize  = 0.1 + (0.2 * (1 - (phase - 0.5) * 2))  # Exhale
            if freshBreath == True:
                freshBreath = False

        TestCircle.size = circleSize
      End Routine:
        thisExp.addData('Condition', thisCondition)
        thisExp.addData('Salience', changeSalience)
        thisExp.addData('level', level)
        thisExp.addData('Direction',direction)
        thisExp.addData('DirectionLabel',changeDirection)
        thisExp.addData('Correct',correctAns)
        thisExp.addData('Crit_Ac',Crit_Ac)
        thisExp.addData('Crit_De',Crit_De)

        if thisCondition == "highSalienceAcc":
            n_highSalienceACC += 1
            highIntensitiesACC.append(level)
            if n_highSalienceACC > 2:
                highSEACC = std(highIntensitiesACC) / (n_highSalienceACC ** 0.5)
                #print(highSEACC)
                highSalienceCIACC = 1.645 * highSEACC
                highStepACC = abs(level - lastHighLevelACC)
                lastHighLevelACC = level
                highStopOKACC = highSalienceCIACC < (highStepACC / 2)
        elif thisCondition == "lowSalienceAcc":
            n_lowSalienceACC += 1
            lowIntensitiesACC.append(level)
            if n_lowSalienceACC > 2:
                lowSEACC = std(lowIntensitiesACC) / (n_lowSalienceACC ** 0.5)
                #print(lowSEACC)
                lowSalienceCIACC = 1.645 * lowSEACC
                lowStepACC = abs(level - lastLowLevelACC)
                lastLowLevelACC = level
                lowStopOKACC = lowSalienceCIACC < (lowStepACC / 2)
        elif thisCondition == "highSalienceDec":
            n_highSalienceDEC += 1
            highIntensitiesDEC.append(level)
            if n_highSalienceDEC > 2:
                highSEDEC = std(highIntensitiesDEC) / (n_highSalienceDEC ** 0.5)
                #print(highSEDEC)
                highSalienceCIDEC = 1.645 * highSEDEC
                highStepDEC = abs(level - lastHighLevelDEC)
                lastHighLevelDEC = level
                highStopOKDEC = highSalienceCIDEC < (highStepDEC / 2)
        else:
            n_lowSalienceDEC += 1
            lowIntensitiesDEC.append(level)
            if n_lowSalienceDEC > 2:
                lowSEDEC = std(lowIntensitiesDEC) / (n_lowSalienceDEC ** 0.5)
                #print(lowSEDEC)
                lowSalienceCIDEC = 1.645 * lowSEDEC
                lowStepDEC = abs(level - lastLowLevelDEC)
                lastLowLevelDEC = level
                lowStopOKDEC = lowSalienceCIDEC < (lowStepDEC / 2)

        thisExp.addData('highCIACC',highSalienceCIACC)
        thisExp.addData('lowCIACC',lowSalienceCIACC)
        thisExp.addData('highCIDEC',highSalienceCIDEC)
        thisExp.addData('lowCIDEC',lowSalienceCIDEC)

        thisExp.addData('highStepACC',highStepACC)
        thisExp.addData('lowStepACC',lowStepACC)
        thisExp.addData('highStepDEC',highStepDEC)
        thisExp.addData('lowStepDEC',lowStepDEC)

        thisExp.addData('highStopOKACC',highStopOKACC)
        thisExp.addData('lowStopOKACC',lowStopOKACC)
        thisExp.addData('highStopOKDEC',highStopOKDEC)
        thisExp.addData('lowStopOKDEC',lowStopOKDEC)
    ParallelOutComponent port_teststart
      address = 0xCFF8
      register = EIO
      startData = 80
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine CompleteInstruct
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    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! You've completed the circle task.

        Press <spacebar> to continue.
  Routine CounterCode
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        trialNum = 0
  Routine HeartInstruct
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    KeyboardComponent key_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we'd like you to try to focus on your heartbeat.

        When you see the word 'count' on the screen, please start counting the heartbeats that you can feel, without 'taking your pulse' with your fingers.
        Just count up from 0 for every hearbeat that you can sense until the word 'count' disappears.

        Press <spacebar> when you are ready to start.
  Routine HeartCount
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    TextComponent readyScreen
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Get ready to count your heartbeats...
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    TextComponent countScreen
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = $countDuration
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      text:
        *******************************
        *** Count your Heartbeats ***
        *******************************
    ParallelOutComponent port_HRstart
      address = 0xCFF8
      register = EIO
      startData = 112
      startVal [time (s)] = 5
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine HeartReport
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    TextComponent beatReport
      color = $textColor
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Please type in the number of heartbeats that you counted and press <enter>
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    TextboxComponent HRenter_text
      bold = False
      color = $textColor
      editable = True
      letterHeight = 0.05
      pos = (0, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $HRtext
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    CodeComponent HRenter_code
      Code Type = Auto->JS
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      Begin Experiment:
        HRtext = ""
        lastKey = ""
      Begin Routine:
        HRtext = ""
        lastKey = ""
        #allowedKeys = ['1','2','3','4','5','6','7','8','9','0', 'return', 'backspace', 'num_1', 'num_2', 'num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0']
        allowedKeys = ['1','2','3','4','5','6','7','8','9','0', 'return', 'backspace']
      Each Frame:
        # Get currently pressed key
        currentKey = event.getKeys()
        # If it is not nothing, update last pressed
        if currentKey:
            lastKey= currentKey[-1]
        # This key checking will override the usual listener for ESCAPE, so add it back in manually
        #if lastKey == "escape":
        #    continueRoutine = False
        if lastKey in allowedKeys:
            if lastKey == "backspace":
                HRtext = HRtext[:-1]
                lastKey = ""
            elif lastKey == "return":
                lastKey = ""
                continueRoutine = False
            else:
                HRtext = HRtext + lastKey
                lastKey = ""
      End Routine:
        thisExp.addData('HRreport', HRtext)
    ParallelOutComponent port_HRstop
      address = 0xCFF8
      register = EIO
      startData = 128
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine EndPart1
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    KeyboardComponent key_space_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great! Please let the researcher know that you've finished this section of the study.
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    ParallelOutComponent port_stopexp
      address = 0xCFF8
      register = EIO
      startData = 32
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine StartupCode
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    CodeComponent StartupCode
      Code Type = Auto->JS
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      Before Experiment:
        def std(numbers, is_sample=True):
            # Calculate the standard deviation of a list of numbers without using external libraries.
            # Check for valid input
            if not numbers:
                raise ValueError("Cannot calculate standard deviation of empty list")
            if is_sample and len(numbers) < 2:
                raise ValueError("Sample standard deviation requires at least 2 values")

            # Calculate mean
            mean = sum(numbers) / len(numbers)

            # Calculate sum of squared differences from mean
            squared_diff_sum = 0
            for x in numbers:
                squared_diff_sum += (x - mean) ** 2

            # Determine divisor based on whether we're calculating sample or population std dev
            divisor = len(numbers) - 1 if is_sample else len(numbers)

            # Calculate standard deviation using exponentiation operator for square root
            std_dev = (squared_diff_sum / divisor) ** 0.5

            return std_dev

        backcolor = [0.6549, 0.6549, 0.6549]
        textColor = [-1.0000, -1.0000, -1.0000]
        trialNum = 0
      Begin Experiment:
        Condition = expInfo['Condition']

        if (Condition == 'breath'):
            instructText = """Please breathe along with the circle.
            Breathe in as the circle gets larger,
            and breathe out as the circle gets smaller.

            Try to notice if your breathing speed is changing."""
        else:
            instructText = """Please watch the circle.
            Notice as the circle gets larger,
            and notice as the circle gets smaller.

            Try to notice if the circle speed is changing."""

        resetCycleDuration = 4 #starting breath length (in s)
        circleSize = .5
        numBreaths = 4
        freshBreath = True

        #changeVal = 1.2
        #changeSalience = 1
        midPoint = round(numBreaths / 2,0)

        n_highSalienceACC = 0
        n_lowSalienceACC = 0
        n_highSalienceDEC = 0
        n_lowSalienceDEC = 0

        highIntensitiesACC = []
        lowIntensitiesACC = []
        highIntensitiesDEC = []
        lowIntensitiesDEC = []

        highSEACC = ""
        lowSEACC = ""
        highSEDEC = ""
        lowSEDEC= ""

        highSalienceCIDEC = ""
        lowSalienceCIDEC = ""
        highSalienceCIACC = ""
        lowSalienceCIACC = ""

        highStopOKACC = False
        lowStopOKACC = False
        highStopOKDEC = False
        lowStopOKDEC = False

        highCIACC = ""
        lowCIACC = ""
        highCIDEC = ""
        lowCIDEC = ""

        highStepACC = ""
        lowStepACC = ""
        highStepDEC = ""
        lowStepDEC = ""

        lastHighLevelACC = .5
        lastLowLevelACC = .5
        lastHighLevelDEC = .5
        lastLowLevelDEC = .5

        #Eventually calculate the thresholds
        T_hiAc = ""
        T_loAc = ""
        T_hiDe = ""
        T_loDe = ""

        #Thresholds generate critical thresholds
        Crit_Ac = ""
        Crit_De = ""
    ParallelOutComponent port_startexp
      address = 0xCFF8
      register = EIO
      startData = 16
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine Instruct1
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    TextComponent text_7
      color = $textColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $instructText
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine judgeValence
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    ImageComponent valenceImage
      image = images/ValenceImg.png
      size = (1.0, 0.307)
      startVal [time (s)] = 0.0
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    SliderComponent valenceSlider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 3
      labels = (1, 2, 3, 4, 5, 6)
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (.8, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        valenceSlider.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                valenceSlider.markerPos = valenceSlider.markerPos - 1
            elif 'right' in keys:
                valenceSlider.markerPos = valenceSlider.markerPos  + 1
            elif 'return' in keys:
                # confirm rating by setting to current markerPos
                valenceSlider.rating= valenceSlider.markerPos
                continueRoutine=False
            elif 'enter' in keys:
                # confirm rating by setting to current markerPos
                valenceSlider.rating= valenceSlider.markerPos
                continueRoutine=False
            elif 'space' in keys:
                # confirm rating by setting to current markerPos
                valenceSlider.rating= valenceSlider.markerPos
                continueRoutine=False
      End Routine:
        thisExp.addData("JudgeRating", confidenceSlider.markerPos)
Flow
  Routine StartupCode
  Routine judgeValence
  Routine judgearousal_2
  Routine Start
  Routine Instruct1
  Routine Instruct2
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = questDefinitionRullRandom.csv
    loopType = interleaved staircases
    nReps = 10
    stairType = QUEST
    switchMethod = random
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    conditions:
      [OrderedDict([('label', 'lowSalienceAcc'), ('startVal', 0.4), ('startValSd', 0.35), ('pThreshold', 0.75), ('method', 'quantile'), ('beta', 3.5), ('delta', 0.05), ('gamma', 0.333), ('grain', 0.05), ('minVal', 0.01), ('maxVal', 1), ('changeSalience', 0), ('changeDirection', 'Acc')]),
      OrderedDict([('label', 'highSalienceAcc'), ('startVal', 0.4), ('startValSd', 0.35), ('pThreshold', 0.75), ('method', 'quantile'), ('beta', 3.5), ('delta', 0.05), ('gamma', 0.333), ('grain', 0.05), ('minVal', 0.01), ('maxVal', 1), ('changeSalience', 1), ('changeDirection', 'Acc')]),
      OrderedDict([('label', 'lowSalienceDec'), ('startVal', 0.4), ('startValSd', 0.35), ('pThreshold', 0.75), ('method', 'quantile'), ('beta', 3.5), ('delta', 0.05), ('gamma', 0.333), ('grain', 0.05), ('minVal', 0.01), ('maxVal', 1), ('changeSalience', 0), ('changeDirection', 'Dec')]),
      OrderedDict([('label', 'highSalienceDec'), ('startVal', 0.4), ('startValSd', 0.35), ('pThreshold', 0.75), ('method', 'quantile'), ('beta', 3.5), ('delta', 0.05), ('gamma', 0.333), ('grain', 0.05), ('minVal', 0.01), ('maxVal', 1), ('changeSalience', 1), ('changeDirection', 'Dec')])]
    Routine trial
    Routine judgebreath
    Routine judgeconfidence
    Routine judgearousal_2
  LoopTerminator trials
  Routine CalcThresholds
  Routine TestTrialInstruct
  LoopInitiator testTrials loopType="TrialHandler"
    conditionsFile = justLabels.csv
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('testLabel', 'lowSalienceAcc'), ('testChangeSalience', 0), ('testChangeDirection', 'Acc')]),
      OrderedDict([('testLabel', 'highSalienceAcc'), ('testChangeSalience', 1), ('testChangeDirection', 'Acc')]),
      OrderedDict([('testLabel', 'lowSalienceDec'), ('testChangeSalience', 0), ('testChangeDirection', 'Dec')]),
      OrderedDict([('testLabel', 'highSalienceDec'), ('testChangeSalience', 1), ('testChangeDirection', 'Dec')])]
    Routine TestTrial
    Routine judgebreath
    Routine judgeconfidence
    Routine judgearousal_2
  LoopTerminator testTrials
  Routine CompleteInstruct
  Routine HeartInstruct
  LoopInitiator HeartbeatLoop loopType="TrialHandler"
    conditionsFile = heartConditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('thisCondition', 'short'), ('countDuration', 25)]),
      OrderedDict([('thisCondition', 'medium'), ('countDuration', 35)]),
      OrderedDict([('thisCondition', 'long'), ('countDuration', 55)])]
    Routine HeartCount
    Routine HeartReport
  LoopTerminator HeartbeatLoop
  Routine EndPart1
